PsychoPy2experiment version="2020.2.5"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = test
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Routines
  Routine trial
    TextComponent text
      color = red
      letterHeight = 0.1
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 2.5
      text [set every repeat] = $texten
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    ImageComponent image
      image [set every repeat] = $bilden
      size = (0.5, 0.5)
      startVal [time (s)] = 4.5
      stopVal [duration (s)] = 2.5
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    ImageComponent image2
      image [set every repeat] = $bilden
      size = (0.5, 0.5)
      startVal [time (s)] = 8
      stopVal [duration (s)] = 2.5
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    TextComponent text2
      color = red
      letterHeight = 0.1
      startVal [time (s)] = 8
      stopVal [duration (s)] = 2.5
      text [set every repeat] = $texten
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Flow
  LoopInitiator trials loopType="TrialHandler"
    Selected rows = 0:2
    conditionsFile = conditionsTest.csv
    loopType = sequential
    nReps = 50
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    conditions:
      [OrderedDict([('Texten', 'Paradox'), ('Bilden', 'brain1.jpg')]),
      OrderedDict([('Texten', 'Derivata'), ('Bilden', 'brain2.jpg')])]
    Routine trial
  LoopTerminator trials
